opentrons/protocol-designer 5.1.0
schemaVersion: 4
protocolName: Lab Demonstration
author: David Dooley
description: This is a demonstration.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 2.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
  p300_multi_gen2: {mount: left}
modules:
  magneticModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 8}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 7}
  NEST 12 Well Reservoir 15 mL: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 2}
  Falcon 96 Well Flat Bottom Plate: {definitionId: custom_beta/falcon_96_flat_bottom/1, slot: magneticModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Water: {description: It's just water.}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Water {volume: 1000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Falcon 96 Well Flat Bottom Plate
  dispense_wells: A1-H1
  dispense_mmFromBottom: 2.5
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseSecond: 5
  pauseMessage: HOLD UP
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Falcon 96 Well Flat Bottom Plate
  dispense_wells: A1
  dispense_mmFromBottom: 2.5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 50
  times: 3
  changeTip: once
  labware: Falcon 96 Well Flat Bottom Plate
  wells: A1
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  mix_mmFromBottom: 2.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 110
  path: single
  changeTip: once
  aspirate_labware: Falcon 96 Well Flat Bottom Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 12 Well Reservoir 15 mL
  dispense_wells: A12
  dispense_mmFromBottom: 2.5
labwareDefinitions:
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  custom_beta/falcon_96_flat_bottom/1:
    brand: {brand: Falcon, brandId: [351172]}
    metadata: {displayName: Falcon 96 Well Flat Bottom Plate, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 128, yDimension: 86, zDimension: 15}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: falcon_96_flat_bottom}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11, totalLiquidVolume: 370, shape: circular, diameter: 8, x: 15, y: 74, z: 4}
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Falcon 96 Well Flat Bottom Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Falcon 96 Well Flat Bottom Plate, well: B1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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